PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'randint(10000, 99999)', 'Language Proficiency': "['Professional Native','Professional L2']"}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['background.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = (1280, 720)
  backgroundFit = contain
  backgroundImg = background.jpg
  color = #beb0df
  colorSpace = hex
  expName = ArabicTask
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 0
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Routines
  Routine WelcomeScreen
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    CodeComponent fullscreen_Code_2
      Code Type = JS
      Begin JS Experiment:
        // Grab the whole web page element
        var elem = document.documentElement;

        // Ask the browser to enter full screen
        if (elem.requestFullscreen) {
          elem.requestFullscreen();
        } else if (elem.webkitRequestFullscreen) { /* Safari Support */
          elem.webkitRequestFullscreen();
        } else if (elem.msRequestFullscreen) { /* Edge/IE Support */
          elem.msRequestFullscreen();
        }
    CodeComponent global_background_code
      Code Type = JS
      Begin JS Experiment:
        // Create a global background image object
        window.global_bg = new visual.ImageStim({
            win: psychoJS.window,
            name: 'global_bg',
            image: 'background.jpg',
            units: 'norm',
            size: [2, 2], // Stretches to cover 100% of the screen
            depth: 100    // Pushes it to the absolute back layer
        });

        // Command PsychoJS to automatically draw it on every frame forever
        window.global_bg.setAutoDraw(true);
    TextComponent textWelcome
      color = #62547c
      font = Broadway
      languageStyle = Arabic
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Welcome to the Arabic Fluency Task
        مرحبا بك في اختبار إتقان اللغة العربية
    PolygonComponent polygonStart
      colorSpace = hex
      fillColor = #b6a7da
      interpolate = nearest
      lineColor = #b6a7da
      lineWidth = 2
      pos = (0, -0.3)
      shape = custom polygon...
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      vertices = [(-0.35, 0.15), (0.35, 0.15), (0.365, 0.149), (0.379, 0.147), (0.394, 0.144), (0.407, 0.139), (0.421, 0.132), (0.433, 0.125), (0.445, 0.116), (0.456, 0.106), (0.466, 0.095), (0.475, 0.083), (0.482, 0.071), (0.489, 0.057), (0.494, 0.044), (0.497, 0.029), (0.499, 0.015), (0.5, 0), (0.499, -0.015), (0.497, -0.029), (0.494, -0.044), (0.489, -0.057), (0.482, -0.071), (0.475, -0.083), (0.466, -0.095), (0.456, -0.106), (0.445, -0.116), (0.433, -0.125), (0.421, -0.132), (0.407, -0.139), (0.394, -0.144), (0.379, -0.147), (0.365, -0.149), (0.35, -0.15), (-0.35, -0.15), (-0.365, -0.149), (-0.379, -0.147), (-0.394, -0.144), (-0.407, -0.139), (-0.421, -0.132), (-0.433, -0.125), (-0.445, -0.116), (-0.456, -0.106), (-0.466, -0.095), (-0.475, -0.083), (-0.482, -0.071), (-0.489, -0.057), (-0.494, -0.044), (-0.497, -0.029), (-0.499, -0.015), (-0.5, 0), (-0.499, 0.015), (-0.497, 0.029), (-0.494, 0.044), (-0.489, 0.057), (-0.482, 0.071), (-0.475, 0.083), (-0.466, 0.095), (-0.456, 0.106), (-0.445, 0.116), (-0.433, 0.125), (-0.421, 0.132), (-0.407, 0.139), (-0.394, 0.144), (-0.379, 0.147), (-0.365, 0.149)]
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    TextComponent text_ButtonStart
      font = Broadway
      languageStyle = Arabic
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        START
        إبدا
    MouseComponent mouseStart
      clickable = polygonStart
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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  Routine GoodbyeScreen
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    TextComponent text_Goodbye
      color = #62547c
      font = Broadway
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      units = height
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      text:
        Thank you for Participating!

        Please wait while we save your results...
    KeyboardComponent key_respGoodbye
      allowedKeys = 'return'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Extract data object from experiment
        let dataObj = psychoJS._experiment._trialsData;

        // Convert data object to CSV
        let data = [Object.keys(dataObj[0])].concat(dataObj).map(it => {
          return Object.values(it).toString()
        }).join('\n')

        // Add the UTF-8 BOM (\uFEFF) to the very beginning of the file
        //let data = '\uFEFF' + csvString;

        // Send data to OSF via DataPipe
        console.log('Saving data...');
        fetch('https://pipe.jspsych.org/api/data', {
          method: 'POST',
          headers: {
            'Content-Type': 'application/json',
            Accept: '*/*',
          },
          body: JSON.stringify({
            experimentID: 'RKpwU2zVcqiA', // * UPDATE WITH YOUR DATAPIPE EXPERIMENT ID *
            filename: filename,
            data: data,
          }),
        }).then(response => response.json()).then(data => {
          // Log response and force experiment end
          console.log(data);
          quitPsychoJS();
        })
  Routine ParagraphTyping
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    TextComponent baseline_Paragraph
      color = #62547c
      font = Bahnschrift
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = تعد القراءة غذاء للعقل والروح. فهي ليست مجرد هواية نقضي بها اوقات فراغنا بل مفتاح يفتح لنا أبواب المعرفة. من خلال صفحات الكتب نسافر عبر الزمن لنتعرف على حضارات الأمم السابقة ونطوف حول العالم دون أن نتحرك من أماكننا. تتجلى أهمية القراءة في توسيع مدارك الإنسان وتطوير مهارات التفكير لديه كما تزيد من حصيلته اللغوية وتقدم له حلولا مبتكرة للمشكلات.
      units = height
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    TextboxComponent textbox_baseline_input
      bold = False
      borderColor = none
      color = #62547c
      editable = True
      fillColor = white
      font = Bahnschrift
      languageStyle = Arabic
      letterHeight = 0.05
      placeholder = Type here... اكتب هنا...
      pos = (0, -0.3)
      size = (1, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      units = height
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    TextComponent textClocktimer
      color = darkred
      font = Broadway
      letterHeight = 0.05
      pos = (0.6, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every frame] = $str(round(30-t))
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  Routine baseline_Instructions
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    TextComponent baseline_typing
      color = #62547c
      font = Bahnschrift
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      units = height
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      text:
        A paragraph will appear after you hit start! trying to type it as fast and accurately as you can. You will have 60 seconds to finish.

        سيظهر مقال بعد الضغط على زر البدء؛ حاول كتابته بأقصى سرعة ودقة ممكنتين. سيكون لديك ستون ثانية لإتمام المهمة
    PolygonComponent polygonBaseline
      colorSpace = hex
      fillColor = #b6a7da
      lineColor = #b6a7da
      lineWidth = 2
      pos = (0, -0.3)
      shape = custom polygon...
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      vertices = [(-0.35, 0.15), (0.35, 0.15), (0.365, 0.149), (0.379, 0.147), (0.394, 0.144), (0.407, 0.139), (0.421, 0.132), (0.433, 0.125), (0.445, 0.116), (0.456, 0.106), (0.466, 0.095), (0.475, 0.083), (0.482, 0.071), (0.489, 0.057), (0.494, 0.044), (0.497, 0.029), (0.499, 0.015), (0.5, 0), (0.499, -0.015), (0.497, -0.029), (0.494, -0.044), (0.489, -0.057), (0.482, -0.071), (0.475, -0.083), (0.466, -0.095), (0.456, -0.106), (0.445, -0.116), (0.433, -0.125), (0.421, -0.132), (0.407, -0.139), (0.394, -0.144), (0.379, -0.147), (0.365, -0.149), (0.35, -0.15), (-0.35, -0.15), (-0.365, -0.149), (-0.379, -0.147), (-0.394, -0.144), (-0.407, -0.139), (-0.421, -0.132), (-0.433, -0.125), (-0.445, -0.116), (-0.456, -0.106), (-0.466, -0.095), (-0.475, -0.083), (-0.482, -0.071), (-0.489, -0.057), (-0.494, -0.044), (-0.497, -0.029), (-0.499, -0.015), (-0.5, 0), (-0.499, 0.015), (-0.497, 0.029), (-0.494, 0.044), (-0.489, 0.057), (-0.482, 0.071), (-0.475, 0.083), (-0.466, 0.095), (-0.456, 0.106), (-0.445, 0.116), (-0.433, 0.125), (-0.421, 0.132), (-0.407, 0.139), (-0.394, 0.144), (-0.379, 0.147), (-0.365, 0.149)]
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    TextComponent textBaseline_Start
      font = Broadway
      languageStyle = Arabic
      letterHeight = 0.045
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      units = height
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      text:
        Begin
        إبدا
    MouseComponent mouse_Instruc
      clickable = polygonBaseline
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveParamsClickable [set every repeat] = name,
      startVal [time (s)] = 0.0
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    CodeComponent fullscreen_Code
      Code Type = JS
      disabled = True
      End JS Routine:
        // Grab the whole web page element
        var elem = document.documentElement;

        // Ask the browser to enter full screen
        if (elem.requestFullscreen) {
          elem.requestFullscreen();
        } else if (elem.webkitRequestFullscreen) { /* Safari Support */
          elem.webkitRequestFullscreen();
        } else if (elem.msRequestFullscreen) { /* Edge/IE Support */
          elem.msRequestFullscreen();
        }
  Routine Task
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    TextComponent text_Taskquestion
      color = #62547c
      font = Broadway
      languageStyle = Arabic
      letterHeight = 0.05
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Question
      units = height
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    TextboxComponent textbox_answer
      bold = False
      borderColor = none
      color = #62547c
      editable = True
      fillColor = white
      font = Broadway
      languageStyle = Arabic
      letterHeight = 0.05
      placeholder = ...
      size = (0.35, 0.10)
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_respTask
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent TaskCounter
      color = #62547c
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text [set every repeat] = $" السؤال" + str(trials.thisN + 1) + " " ":" + "املأ الفراغ بتصريف الفعل الصحيح"
      units = height
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    CodeComponent code_correctanswer
      Code Type = Both
      End JS Routine:
        typed_text = textbox_answer.text.trim();
        expected_text = Correct_Answer.trim();
        if ((typed_text === expected_text)) {
            accuracy = 1;
        } else {
            accuracy = 0;
        }
        psychoJS.experiment.addData("Accuracy_Score", accuracy);
      End Routine:
        # 1. Grab the typed text and the correct answer
        # The .strip() function removes any accidental spaces the user typed before or after the word
        typed_text = textbox_answer.text.strip()
        expected_text = Correct_Answer.strip()

        # 2. Compare the two words
        if typed_text == expected_text:
            accuracy = 1  # 1 means Correct
        else:
            accuracy = 0  # 0 means Wrong

        # 3. Tell PsychoPy to save this score into the final data file
        thisExp.addData('Accuracy_Score', accuracy)
Flow
  Routine WelcomeScreen
  Routine baseline_Instructions
  Routine ParagraphTyping
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = IntialTask.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Question': '(وفى) + مجزوم', 'Correct_Answer': 'يف'},
      {'Question': '(مشى) + مجزوم', 'Correct_Answer': 'يمش'},
      {'Question': '(سعى) + مجزوم', 'Correct_Answer': 'يسع'},
      {'Question': '(دعا) + مجزوم', 'Correct_Answer': 'يدع'}]
    Routine Task
  LoopTerminator trials
  Routine GoodbyeScreen
